# 1 "/opt/topspin3.5pl6/exp/stan/nmr/lists/pp/cpmgpr1d"
;cpmgpr1d
;avance-version (12/01/11)
;1D experiment with
;   T2 filter using Carr-Purcell-Meiboom-Gill sequence
;using f1 presaturation
;
;$CLASS=HighRes
;$DIM=1D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


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"p2=p1*2"
"d11=30m"
"d12=20u"


"DELTA1=d20-p1*2/3.1416"
"DELTA2=d20-de"
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"acqt0=0"
baseopt_echo


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; dimension 1D; AQ_mode 
define delay MCWRK
define delay MCREST
"MCREST = 30m - 30m"
"MCWRK = 0.333333*30m"

    dccorr
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1 ze
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2 MCWRK  * 2
LBLF0, MCWRK
  MCREST
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  d12 pl9:f1
  d1 cw:f1 ph29
  4u do:f1
  d12 pl1:f1
  p1 ph1
  DELTA1
  p2 ph2
  d20
3 d20
  p2 ph2
  d20
  lo to 3 times l4
  d20
  p2 ph2
  DELTA2
  go=2 ph31
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  MCWRK wr #0
  MCWRK zd
  lo to LBLF0 times td0

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exit
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ph1=0 0 2 2 1 1 3 3 
ph2=1 3 1 3 0 2 0 2
ph29=0
ph31=0 0 2 2 1 1 3 3


;pl1 : f1 channel - power level for pulse (default)
;pl9 : f1 channel - power level for presaturation
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;d1 : relaxation delay; 1-5 * T1
;d11: delay for disk I/O                             [30 msec]
;d12: delay for power switching                      [20 usec]
;d20: fixed echo time to allow elimination of J-mod. effects 
;        d20 should be << 1/J ,but > (50 * P2)       [1-2 msec]
;l4: loop for T2 filter                              [4 - 20] 
;ns: 1 * n, total number of scans: NS * TD0
;ds: 16
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;$Id: cpmgpr1d,v 1.8 2012/01/31 17:49:22 ber Exp $
